<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q3="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:q2="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FileCapture">
          <q1:FileName>AF_dom1_2test12017-12-02T11_24_50.avi</q1:FileName>
          <q1:PlaybackRate>0</q1:PlaybackRate>
          <q1:StartPosition>0</q1:StartPosition>
          <q1:PositionUnits>Frames</q1:PositionUnits>
          <q1:Loop>false</q1:Loop>
          <q1:Playing>true</q1:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:BackgroundSubtraction">
          <q1:BackgroundFrames>1</q1:BackgroundFrames>
          <q1:AdaptationRate>1</q1:AdaptationRate>
          <q1:ThresholdValue>3</q1:ThresholdValue>
          <q1:ThresholdType>Binary</q1:ThresholdType>
          <q1:SubtractionMethod>Absolute</q1:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Grayscale" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Smooth">
          <q1:SmoothType>Gaussian</q1:SmoothType>
          <q1:Size1>3</q1:Size1>
          <q1:Size2>0</q1:Size2>
          <q1:Sigma1>0</q1:Sigma1>
          <q1:Sigma2>0</q1:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Switch" />
      </Expression>
      <Expression xsi:type="q2:CsvWriter">
        <q2:FileName>wynik2.csv</q2:FileName>
        <q2:Append>false</q2:Append>
        <q2:Overwrite>true</q2:Overwrite>
        <q2:Suffix>None</q2:Suffix>
        <q2:IncludeHeader>true</q2:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:Sum" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Crop">
          <q1:RegionOfInterest>
            <q1:X>480</q1:X>
            <q1:Y>3</q1:Y>
            <q1:Width>531</q1:Width>
            <q1:Height>636</q1:Height>
          </q1:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:MorphologicalOperator">
          <q1:Size>
            <q1:Width>3</q1:Width>
            <q1:Height>3</q1:Height>
          </q1:Size>
          <q1:Anchor>
            <q1:X>1</q1:X>
            <q1:Y>1</q1:Y>
          </q1:Anchor>
          <q1:Shape>Rectangle</q1:Shape>
          <q1:Iterations>1</q1:Iterations>
          <q1:Operation>Erode</q1:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>10000</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="WindowWorkflow">
        <Name>FreezingOnset</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Timer">
                <DueTime>PT1M</DueTime>
                <Period>PT0S</Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Timestamp" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Timestamp</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>5</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Vision.FileCapture, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BackgroundSubtraction, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Smooth, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Switch, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Sum, Bonsai.Dsp, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.MorphologicalOperator, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DoubleProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.DistinctUntilChanged, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>